// ImageTypes
(FixedInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingInternalImagePixelType "float")
(MovingImageDimension 3)

// Specify whether you want to take into account the so-called
// direction cosines of the images. Recommended: true.
(UseDirectionCosines "true")

// **************** Main Components **************************

(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")

(Interpolator "BSplineInterpolator")
(Metric "AdvancedMattesMutualInformation")
(Optimizer "AdaptiveStochasticGradientDescent")

(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")

(Transform "EulerTransform")

// ***************** Transformation **************************

// Scales the rotations compared to the translations, to make
// sure they are in the same range.
(AutomaticScalesEstimation "true")

// Automatically guess an initial translation by aligning the
// geometric centers of the fixed and moving.
(AutomaticTransformInitialization "true")
(AutomaticTransformInitializationMethod "GeometricalCenter")

// ******************* Similarity measure *********************

(NumberOfHistogramBins 32)
(FixedKernelBSplineOrder 3)
(MovingKernelBSplineOrder 3)
(FixedLimitRangeRatio 0.0)
(MovingLimitRangeRatio 0.0)

// If you use a mask, this option is important.
// If the mask serves as region of interest, set it to false.
// If the mask indicates which pixels are valid, then set it to true.
// If you do not use a mask, the option doesn't matter.
(ErodeMask "false")

// ******************** Multiresolution **********************

(NumberOfResolutions 4)

// Whether transforms are combined by composition or by addition.
// In generally, Compose is the best option in most cases.
(HowToCombineTransforms "Compose")

// ******************* Optimizer ****************************

(MaximumNumberOfIterations 500)

// **************** Image sampling **********************

// Number of spatial samples used to compute the mutual
// information (and its derivative) in each iteration.
(NumberOfSpatialSamples 2000)

// Refresh these spatial samples in every iteration, and select
// them randomly. 
(ImageSampler "RandomCoordinate")
(UseRandomSampleRegion "true")
(SampleRegionSize 50.0)
(NewSamplesEveryIteration "true")
(CheckNumberOfSamples "false")

// ************* Interpolation and Resampling ****************

// Order of B-Spline interpolation used during registration/optimisation.
// It may improve accuracy if you set this to 3. Never use 0.
(FixedImageBSplineInterpolationOrder 1)
(BSplineInterpolationOrder 1)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)

// Choose whether to generate the deformed moving image.
(WriteResultImage "true")

// The pixel type and format of the resulting deformed moving image
(ResultImagePixelType "short")
(ResultImageFormat "mhd")